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Storage:Data%20Location:DataIOFilter string DataDirectory= ../data ..\data % % // path to top level data directory (directory) (allow_override)
Storage:Session:DataIOFilter string SubjectName= test Name % % // subject alias (allow_override)
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number (allow_override)
Storage:Session:DataIOFilter string SubjectRun= 01 00 % % // two-digit run number (allow_override)
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Buffering:BufferedADC int SourceBufferSize= 2s 2s % % // size of data acquisition ring buffer (in blocks or seconds)
Source:Signal%20Properties:OpenBCI_ModuleADC int SourceCh= auto auto 1 % // number of digitized and stored channels
Source:Signal%20Properties:OpenBCI_ModuleADC int SampleBlockSize= auto // number of samples transmitted at a time
Source:Signal%20Properties:OpenBCI_ModuleADC float SamplingRate= auto sample rate % 
Source:Signal%20Properties:OpenBCI_ModuleADC list ChannelNames= 1 auto // names of amplifier channels
Source:Signal%20Properties:OpenBCI_ModuleADC list SourceChOffset= 1 auto auto % % // raw A/D offset to subtract, typically 0
Source:Signal%20Properties:OpenBCI_ModuleADC list SourceChGain= 1 auto // physical units per raw A/D unit
Source:Signal%20Properties:OpenBCI_ModuleADC string PortName= auto This software can 
Source:Signal%20Properties:OpenBCI_ModuleADC int MyAmpSetting= 3 // some user setting specific to your amp
Source:Signal%20Properties:OpenBCI_ModuleADC list ChannelsGain= 1 auto 24 1 % // The channel gain can be 1 2 4 6 8 12 24(defult)
Source:Signal%20Properties:OpenBCI_ModuleADC list SourceChList= 1 auto // The default source channel list is 1 2 3 4 5 6 7 8
Source:Signal%20Properties:OpenBCI_ModuleADC int ShowLostPackages= 0 1 0 1 
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Source:Signal%20Properties:OpenBCI_2ADC int OpenBCI_2TestMode= 0 // Testing the the Square wave & whether it works, so 0 or 1
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
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Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
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Source:Online%20Processing:TransmissionFilter list TransmitChList= 1 * // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
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Storage:Data%20Location:RunManager string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
System:Configuration matrix SignalProcessingFilterChain= 1 { Filter%20Name Position%20String } ExpressionFilter 2.D2 // SignalProcessing filter chain (noedit)(readonly)
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 OpenBCI_2ADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain (noedit)(readonly)
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 640 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 480 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= 0 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x505050 0x505050 % % // Application window background color (color)
Application:Application%20Window:ApplicationWindow matrix WindowInfo= 1 1 auto // Application window information (readonly)(noedit)
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Application:AudioPlayback:ApplicationWindow float AudioPlaybackRate= auto // audio playback sampling rate
Application:AudioPlayback:ApplicationWindow int AudioPlaybackChannels= auto // number of playback output channels
Application:AudioPlayback:ApplicationWindow float AudioPlaybackBufferDuration= auto // duration of playback buffer
Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:StimulusTask float PreRunDuration= 1s 1 0 % // pause preceding first sequence
Application:Sequencing:StimulusTask float PostRunDuration= 1s 0 0 % // pause following last sequence
Application:Sequencing:StimulusTask float PreSequenceDuration= 2s 2s 0 % // pause preceding sequences/sets of intensifications
Application:Sequencing:StimulusTask float PostSequenceDuration= 2s 2s 0 % // pause following sequences/sets of intensifications
Application:Sequencing:StimulusTask float StimulusDuration= 375ms 40ms 0 % // stimulus duration
Application:Sequencing:StimulusTask string EarlyOffsetExpression= % // abort stimulus if this expression becomes true
Application:Sequencing:StimulusTask float ISIMinDuration= 375ms 80ms 0 % // minimum duration of inter-stimulus interval
Application:Sequencing:StimulusTask float ISIMaxDuration= 437.5ms 80ms 0 % // maximum duration of inter-stimulus interval
Application:Result%20Processing:StimulusTask int InterpretMode= 0 0 0 2 // interpretation of results: 0 none, 1 online free mode, 2 copy mode (enumeration)
Application:Result%20Processing:StimulusTask int DisplayResults= 1 1 0 1 // display results of copy/free spelling (boolean)
Application:Result%20Processing:StimulusTask int AccumulateEvidence= 0 0 0 1 // accumulate evidence until a selection is made (boolean)
Application:Result%20Processing:StimulusTask float MinimumEvidence= 0 0 0 % // do not make a selection unless target evidence exceeds this value. For a normalized classifier, MinimumEvidence approximates -2.3*log10(Error Probability)
Application:Sequencing:StimulusPresentationTask intlist Sequence= 6 3 3 3 3 3 3 // Sequence in which stimuli are presented (deterministic mode)/ Stimulus frequencies for each stimulus (random mode)/ Ignored (P3Speller compatible mode)
Application:Sequencing:StimulusPresentationTask int SequenceType= 1 0 0 2 // Sequence of stimuli is 0 deterministic, 1 random, 2 P3Speller compatible (enumeration)
Application:Sequencing:StimulusPresentationTask int NumberOfSequences= 2 1 0 % // number of sequence repetitions
Application:Sequencing:StimulusPresentationTask intlist ToBeCopied= 4 1 2 3 4 1 1 % // Sequence in which stimuli need to be copied (only used in copy mode)
Application:Sequencing:StimulusPresentationTask string UserComment= Test%20Run // User comments for a specific run
Application:Stimuli:StimulusPresentationTask matrix Stimuli= { caption icon audio StimulusDuration AudioVolume } { stimulus1 stimulus2 stimulus3 stimulus4 stimulus5 stimulus6 } One Two Three Four Five Six images/1.bmp images/2.bmp images/3.bmp images/4.bmp images/5.bmp images/6.bmp sounds/1.wav sounds/2.wav sounds/3.wav sounds/4.wav sounds/5.wav sounds/6.wav 93.75ms 187.5ms 187.5ms 62.5ms 125ms 250ms 85 88 91 94 97 100 // captions and icons to be displayed, av media to be played for different stimuli
Application:Stimuli:StimulusPresentationTask matrix FocusOn= { caption icon audio } { focuson } Please%20focus%20on images/focuson.bmp sounds/uh-uh.wav // initial announcement what to focus on
Application:Stimuli:StimulusPresentationTask matrix Result= { caption icon audio } { result } The%20result%20was images/result.bmp sounds/uh-uh.wav // final result announcement 
Application:Stimuli:StimulusPresentationTask int StimulusWidth= 0 0 0 100 // StimulusWidth in percent of screen width (zero for original pixel size)
Application:Stimuli:StimulusPresentationTask int CaptionHeight= 10 0 0 100 // Height of stimulus caption text in percent of screen height
Application:Stimuli:StimulusPresentationTask string CaptionColor= 0x004040 0x00FFFFFF 0x00000000 0xFFFFFFFF // Color of stimulus caption text (color)
Application:Stimuli:StimulusPresentationTask stringlist BackgroundColor= 1 0x80FF00 0x00FFFF00 0x00000000 0xFFFFFFFF // Color of stimulus background (color)
Application:Stimuli:StimulusPresentationTask int CaptionSwitch= 0 1 0 1 // Present captions (boolean)
Application:Stimuli:StimulusPresentationTask int IconSwitch= 1 1 0 1 // Present icon files (boolean)
Application:Stimuli:StimulusPresentationTask int AVSwitch= 0 0 0 1 // Present media files (boolean)
Application:Stimuli:StimulusPresentationTask float AudioVolume= 100 100 0 100 // Volume for audio playback in percent
Application:Stimuli:StimulusPresentationTask int AVPlayToEnd= 1 1 0 1 // Never abort playback of media files (boolean)
Application:Stimuli:StimulusPresentationTask int AudioSwitch= 1 1 0 1 // Present audio files (boolean)(superseded by AVSwitch)
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { TIME%20OUT%20!!! Waiting%20to%20start%20... } Zeit%20abgelaufen! Warte%20... // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 StimulusPresentationTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain (noedit)(readonly)
System:Randomization int RandomSeed= 17520 0 % % // seed for the BCI2000 pseudo random number generator (readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
