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Storage:Data%20Location string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session string SubjectName= BCI_006_Day4_Training_Session1 Name % % // subject alias
Storage:Session string SubjectSession= 001 001 % % // three-digit session number
Storage:Session string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation string ID_System= % // BCI2000 System Code
Storage:Documentation string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Signal%20Properties int SourceCh= 24 16 1 % // number of digitized and stored channels
Source:Signal%20Properties int SampleBlockSize= 12 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties int SamplingRate= 300 256Hz 1 % // sample rate
Source:SignalGeneratorADC list ChannelNames= 24 P3 C3 F3 Fz F4 C4 P4 Cz Pz Fp1 Fp2 T3 T5 O1 O2 X3 X2 F7 F8 X1 A2 T6 T4 TRG 
Source:SignalGeneratorADC list SourceChOffset= 24 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 
Source:SignalGeneratorADC list SourceChGain= 24 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 
Source:SignalGeneratorADC int ModulateAmplitude= 0 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 0 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 0 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC list NaNChannels= 1 auto // Channel numbers set to NaN if space is pressed (empty if not used)
Source:SignalGeneratorADC float SineFrequency= 10Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0muV 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string AmplitudeMultiplier= 1 1 % % // Expression to multiply amplitude by
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Source:SignalGeneratorADC matrix SourceProperties= 0 { Frequency Amplitude } // Source properties
Source:SignalGeneratorADC matrix MixingMatrix= 0 1 // Source-to-sensor projection, rows are sources, columns are sensors
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation string StorageTime= % // time of beginning of data storage
Source:Source%20Filter int NotchFilter= 0 0 0 2 // Power line notch filter: 0: disabled, 1: at 50Hz, 2: at 60Hz (enumeration)
Source:Source%20Filter int HighPassFilter= 2 0 0 2 // Source high pass filter: 0: disabled, 1: at 0.1Hz, 2: at 1Hz (enumeration)
Source:Source%20Filter int LowPassFilter= 4 0 0 4 // Source low pass filter: 0: disabled, 1: at 9Hz, 2: at 30Hz, 3: at 40Hz, 4: at 70Hz (enumeration)
Source:Source%20Filter list UnfilteredChannels= 0 // names or indices of channels to omit from source filter
Filtering:IIR%20Filter int Rectification= 0 0 0 2 // Rectify output: 0 No Rectification, 1 Half-Wave, 2 Full-Wave (enumeration)
Source:Alignment int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes) (boolean)
Source:Alignment floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
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Source:Online%20Processing list TransmitChList= 1 * // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
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Storage:Data%20Location string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
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System:Configuration matrix SignalSourceFilterChain= 9 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 SourceFilter 1.01 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain (noedit)(readonly)
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Filtering:Windowing int WindowLength= 0.5s 0.5s % % // Length of window
Filtering:Windowing int Detrend= 1 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:Windowing int WindowFunction= 0 0 0 3 // Window function 0: Rectangular, 1: Hamming, 2: Hann, 3: Blackman (enumeration)
Filtering:Spectral%20Estimation float FirstBinCenter= 1Hz 0Hz % % // Center of first frequency bin (in Hz) (allow_override)
Filtering:Spectral%20Estimation float LastBinCenter= 29Hz 30Hz % % // Center of last frequency bin (in Hz) (allow_override)
Filtering:Spectral%20Estimation float BinWidth= 2Hz 3Hz % % // Width of spectral bins (in Hz) (allow_override)
Filtering:Spectral%20Estimation int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: Coefficients (enumeration) (allow_override)
Filtering:AR%20Spectral%20Estimator int ModelOrder= 20 16 0 % // AR model order
Filtering:AR%20Spectral%20Estimator int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:Spectral%20Estimation int SpectralEstimator= 1 1 0 2 // Choice of spectral estimation algorithm, 0: None, 1: AR, 2: FFT (enumeration)
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Filtering:SpatialFilter int SpatialFilterType= 3 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter matrix SpatialFilter= { C3_OUT Cz_OUT C4_OUT } { P3 C3 F3 Fz F4 C4 P4 Cz Pz Fp1 Fp2 T3 T5 O1 O2 X3 X2 F7 F8 X1 A2 T6 T4 TRG } -0.25 0.00 -0.25 1.00 -0.25 0.00 0.00 -0.25 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 -0.20 -0.20 0.00 -0.20 1.00 -0.20 0.00 -0.20 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0.00 -0.25 0.00 0.00 -0.25 1.00 -0.25 -0.25 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter intlist SpatialFilterCAROutput= 3 F3 Fz F4 // when using CAR filter type: list of output channels, or empty for all channels
Filtering:SpatialFilter int SpatialFilterMissingChannels= 0 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
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Filtering:LinearClassifier matrix Classifier= 1 { input%20channel input%20element%20(bin) output%20channel weight } F3 5Hz 2 1 // Linear classification matrix in sparse representation
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Filtering:LPFilter float LPTimeConstant= 1s 16s 0 % // time constant for the low pass filter
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Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
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Filtering:Normalizer floatlist NormalizerOffsets= 2 0 18 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 2 0 0.5 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 2 0 0 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 2 0 0 0 BaselineOn==1 // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 20s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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Filtering:HandVibrationFilter int ActivateHandVibration= 1 0 0 1 // (boolean)
Filtering:HandVibrationFilter string COMPort= COM5 // COM port the Arduino is connected to
Filtering:HandVibrationFilterc matrix Configurations= { Configuration%20Expression Amplitude Frequency } { Configuration%201 Configuration%202 Configuration%203 Configuration%204 } Frequency==1 Frequency==2 Frequency==3 Frequency==4 17 17 17 17 4 5 6 7 
Filtering:HandVibrationFilter int UseStateModulation= 1 0 0 1 // Use state value to modulate amplitude (boolean)
Filtering:HandVibrationFilter int DecimationOfModulation= 2 1 1 % 
Filtering:HandVibrationFilter string ModulationState= Amplitude 
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System:Configuration matrix SignalProcessingFilterChain= 7 { Filter%20Name Position%20String } SpatialFilter 2.B SpectralEstimator 2.C LinearClassifier 2.D LPFilter 2.D1 ExpressionFilter 2.D2 Normalizer 2.E HandVibrationFilter 2.F // SignalProcessing filter chain (noedit)(readonly)
Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
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Application:Human%20Interface%20Devices string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
System:Command%20Line%20Arguments variant PythonAppClassFile= TriangleApplicationPsychoPy.py VibrotactileCursorTaskWPrime.py VibrotactileCursorTaskWPrime.py VibrotactileCursorTaskWPrime.py 
System:Command%20Line%20Arguments variant PythonAppShell= 0 0 0 0 
System:Command%20Line%20Arguments variant PythonAppLog= Applogger.txt Applogger.txt Applogger.txt Applogger.txt 
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Source:Signal%20Properties:DataIOFilter list ReferenceChannelName= 0 % % a // list of labels for reference channel or channels
Source:Signal%20Properties:DataIOFilter list GroundChannelName= 0 % % a // label of the ground channel
Source:Playback int EnslavePython= 0 0 0 1 // force BCPy2000 modules to follow states supplied by the source module without being able to change them (boolean)
PythonApp string ApplicationDescription= the%20techno%20triangle % a z // Identifies the stimulus presentation module
PythonApp int ShowSignalTime= 0 0 0 1 // show a timestamp based on the number of processed samples (boolean)
PythonApp:Design int TrialsPerBlock= 20 20 1 % // number of trials in one block
PythonApp:Design int BlocksPerRun= 1 20 1 % // number of sub-blocks in one run
PythonApp:Design int ShowFixation= 0 0 0 1 // show a fixation point in the center (boolean)
PythonApp:Screen int ScreenId= -1 -1 % % // on which screen should the stimulus window be opened - use -1 for last
PythonApp:Screen float WindowSize= 1 1.0 0.0 1.0 // size of the stimulus window, proportional to the screen
PythonApp:Stimuli float RectangleSize= 1.0 1.0 0.0 10.0 
PythonApp:Stimuli int CursorMovement= 1 1 % % // Enables Cursor movement; use 1 for movement, 0 for stationary
PythonApp:Stimuli int NumberDisplayed= 1 1 % % // 1 for displaying the number from start to stop, 0 for no number 
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 PythonAppFilter 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain (noedit)(readonly)
System:Randomization int RandomSeed= 3504 0 % % // seed for the BCI2000 pseudo random number generator (readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
Source:DSI%20Headset string BufferedADC/DSISerialPort= COM3 COM4 % % // Check Bluetooth Settings, and/or Properties of the DSI Bluetooth device
Source:OnlineProcessing intlist BufferedADC/TransmitChList= 1 * // D coefficient of PID controller
% % /ARSpectrum/FirstBinCenter= 0Hz // warn if subsequent Runs have identical RandomSeed value (boolean)
% % /ARSpectrum/LastBinCenter= 30Hz // warn if subsequent Runs have identical RandomSeed value (boolean)
% % /ARSpectrum/BinWidth= 3Hz // warn if subsequent Runs have identical RandomSeed value (boolean)
% % /ARSpectrum/OutputType= 0 // warn if subsequent Runs have identical RandomSeed value (boolean)
% % /FFTSpectrum/FirstBinCenter= 0Hz // warn if subsequent Runs have identical RandomSeed value (boolean)
% % /FFTSpectrum/LastBinCenter= 30Hz // warn if subsequent Runs have identical RandomSeed value (boolean)
% % /FFTSpectrum/BinWidth= 3Hz // warn if subsequent Runs have identical RandomSeed value (boolean)
% % /FFTSpectrum/OutputType= 0 // warn if subsequent Runs have identical RandomSeed value (boolean)
